PsychoPy2experiment version="1.84.2"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = sample_experiment
  Units = use prefs
  Screen = 1
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Routines
  Routine rating
    TextComponent text_rating
      text = Did you like it?
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_scale
      Begin Experiment:
        ##IMPORTED CODE

        from psychopy.iohub import launchHubServer, EventConstants
        io=launchHubServer()
        keyboard_scale = io.devices.keyboard

        ##IMPORTED CODE
      Begin Routine:
        increment = 0
      Each Frame:
        for event in keyboard_scale.getEvents():
            if event.type == EventConstants.KEYBOARD_PRESS:
                if event.key == u'right':
                    increment = 0.01 # move one step to the right
                elif event.key == u'left':
                    increment = -0.01 # move one step to the left
            if event.type == EventConstants.KEYBOARD_RELEASE:
                increment = 0 # stop changing position

        if 0 < rating_scale.markerPlacedAt < 1:
            rating_scale.markerPlacedAt += increment
    RatingScaleComponent rating_scale
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 5
      size = 1.0
      forceEndRoutine = True
      low = 1
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  Routine stimuli_pic
    ImageComponent stim_image_1
      stopVal [duration (s)] = 10
      durationEstim = 10
      startEstim = 0
      startVal [time (s)] = 0.0
      image [set every repeat] = $pic_file
      size = [0.5, 0.5]
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    TextComponent text_7
      color = black
      text = *** Only the picture for 10 seconds ... ***
      stopVal [duration (s)] = 10
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine end
    TextComponent text_4
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Closing text goes here.

        Bye!
  Routine feedback
    CodeComponent code_answer
      Begin Routine:
        if key_answer.corr == 1:
            txt = 'Your answer was correct.'
        else:
            txt = 'Your answer was wrong.'
    TextComponent text_feedback_1
      text [set every repeat] = $str(txt)
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine stimuli_odor
    TextComponent text_2
      stopVal [duration (s)] = 5
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        +
        ODOR
  Routine instruction
    TextComponent text_instruction
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        Placeholder welcome text.

        Enter here basic information about the following task.
        Including instructions and how to response.

        - Press 1, 2, 3 or 4 to continue -
    KeyboardComponent key_instruction
      forceEndRoutine = True
      allowedKeys = '1','2','3','4'
      startVal [time (s)] = 0.0
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  Routine wait_scanner
    TextComponent text_scanner
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Waiting for scanner...
        (Press 'a')
    KeyboardComponent key_scanner
      forceEndRoutine = True
      allowedKeys = 'a'
      startVal [time (s)] = 0.0
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  Routine breath_trigger
    KeyboardComponent key_listen_to_breath
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 0.0
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    ImageComponent stim_image_2
      startVal [time (s)] = 0.0
      image [set every repeat] = $pic_file
      size = [0.5, 0.5]
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    TextComponent text_breath
      color = black
      text = *** Waiting for breath key input ('e', 'i')... ***
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine task
    TextComponent text_variables_task
      color = black
      text [set every repeat] = "*** Stim Nr. "+ $str(stim_nr) + " of available 16 (randomly chosen) ***"
      pos = [0,0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_task
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        Task instruction goes here.
         In the following task you have to ...
        - Press 1, 2, 3 or 4 to continue -
    KeyboardComponent key_task
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','left','right','space'
      startVal [time (s)] = 0.0
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  Routine trigger_odor
    CodeComponent code_trigger_odor
      Begin Experiment:
        import serial

        # open port
        # port = serial.Serial("COM4", 19200, timeout=0.5)
      Begin Routine:
        # open odor channel
        # port.write("\nF%x\r" %odor_channel)
      End Routine:
        # close odor channe
        # port.write("\nF%x\r" %odor_channel)
    ImageComponent stim_image_3
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      image [set every repeat] = $pic_file
      size = [0.5, 0.5]
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    TextComponent text_5
      color = black
      text = *** Triggering odor for 5 seconds ... ***
      stopVal [duration (s)] = 5
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine answer
    KeyboardComponent key_answer
      correctAns = $corrAns_pic
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = '1','2','3','4'
      startVal [time (s)] = 0.0
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    TextComponent text_6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Which picture did you see?
        apple (1)
        strawberry (2)
        wood (3)
        pencil (4)
  Routine jitter
    TextComponent text
      text = +
      stopVal [duration (s)] = 5
      durationEstim = 5
      startEstim = 0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instruction
  Routine wait_scanner
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli_data.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'corrAns_pic': u'apple', u'congruent': 1, u'stim_nr': 1, u'stim_name': None, u'pic_file': u'apple.jpg', u'odor_channel': 1, u'corrAns_odor': u'apple', u'pic_name': u'apple', u'odor_name': u'apple'},
      {u'corrAns_pic': u'strawberry', u'congruent': -1, u'stim_nr': 2, u'stim_name': None, u'pic_file': u'strawberry.jpg', u'odor_channel': 1, u'corrAns_odor': u'apple', u'pic_name': u'strawberry', u'odor_name': u'apple'},
      {u'corrAns_pic': u'wood', u'congruent': 0, u'stim_nr': 3, u'stim_name': None, u'pic_file': u'wood.jpg', u'odor_channel': 1, u'corrAns_odor': u'apple', u'pic_name': u'wood', u'odor_name': u'apple'},
      {u'corrAns_pic': u'pencil', u'congruent': 0, u'stim_nr': 4, u'stim_name': None, u'pic_file': u'pencil.jpg', u'odor_channel': 1, u'corrAns_odor': u'apple', u'pic_name': u'pencil', u'odor_name': u'apple'},
      {u'corrAns_pic': u'apple', u'congruent': -1, u'stim_nr': 5, u'stim_name': None, u'pic_file': u'apple.jpg', u'odor_channel': 2, u'corrAns_odor': u'strawberry', u'pic_name': u'apple', u'odor_name': u'strawberry'},
      {u'corrAns_pic': u'strawberry', u'congruent': 1, u'stim_nr': 6, u'stim_name': None, u'pic_file': u'strawberry.jpg', u'odor_channel': 2, u'corrAns_odor': u'strawberry', u'pic_name': u'strawberry', u'odor_name': u'strawberry'},
      {u'corrAns_pic': u'wood', u'congruent': 0, u'stim_nr': 7, u'stim_name': None, u'pic_file': u'wood.jpg', u'odor_channel': 2, u'corrAns_odor': u'strawberry', u'pic_name': u'wood', u'odor_name': u'strawberry'}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
    Routine task
    Routine jitter
    Routine stimuli_pic
    Routine breath_trigger
    Routine trigger_odor
    Routine answer
    Routine feedback
    Routine rating
  LoopTerminator trials
  Routine end
